PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = num_prueba
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
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    TextComponent text_up
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A continuación, te presentaremos dos imágenes, una del lado derecho y una del lado izquierdo.
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    TextComponent text_mid
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = En cada caso, elige la imagen con MAYOR AREA
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    TextComponent text_down
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Trata de responder tan rápido como puedas.
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    ButtonComponent button_hello
      anchor = bottom-center
      bold = True
      borderColor = 1.0000, -0.4588, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.15)
      startVal [time (s)] = 0
      text = INICIAR
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  Routine TEST_illusion
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    ImageComponent illusion
      image [set every repeat] = $camino
      size = [56*0.72,28*0.72]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      units = cm
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    PolygonComponent LEFT_illusion
      fillColor = white
      opacity = 0
      pos = -0.44,0
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_illusion
      fillColor = white
      opacity = 0
      pos = 0.44,0
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_illusion
      clickable = LEFT_illusion, RIGHT_illusion
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.1
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  Routine inter
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    TextboxComponent inter_text
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.3
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Para ver la siguiente imagen
        Haz click sobre EL CIRCULO NARANJA
    PolygonComponent inter_circulo
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = black
      pos = (0, -0.20)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent inter_mouse
      clickable = inter_circulo
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.01
      timeRelativeTo = experiment
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
      syncScreenRefresh = False
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  Routine fin
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print("fin")
        print(score)
    TextComponent text_2
      color = -0.0353, -0.1843, 0.8667
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Has terminado la prueba.
        ¡Gracias!
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
      timeRelativeTo = experiment
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    TextComponent show_score_final
      color = -0.0353, -0.1843, 0.8667
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Ganancia: $' + str(score) + ' pesos'
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  Routine consent
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    TextComponent consent_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
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      text:
        En esta prueba queremos evaluar la percepción de distintas imágenes. La prueba será en una computadora, donde se presentarán dos imágenes y deberás escoger una de acuerdo a la instrucción dada. Después, haremos unas preguntas referentes a cómo te sentiste durante la prueba. Todo el proceso debería tomar 10 minutos. Es muy importante que sepas que tu participación en este estudio es totalmente voluntaria y que puedes decidir no continuar en cualquier momento.

        Los datos obtenidos de la prueba serán únicamente con fines académicos. En ninguna circunstancia se harán públicos los datos personales de los participantes.

        Si existe cualquier duda con respecto a los puntos que se mencionan o es necesario hacer claro algún punto en particular, es posible expresarlo ante el investigador y con gusto se ofrecerá ayuda.

        Otorgo mi consentimiento para que los datos derivados del estudio sean utilizados para cubrir los objetivos del proyecto de investigación en cuestión.
    ButtonComponent consent_si
      anchor = bottom-center
      bold = True
      borderColor = 1.0000, -0.4588, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = (0.5,0.15)
      startVal [time (s)] = 0
      text = Sí doy mi consentimiento
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    VariableComponent score
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
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  Routine show_score
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    TextComponent scoreTxT_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $'Ganancia: $' + str(score) + ' pesos'
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  Routine intro_gral
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    VariableComponent intro_gral_flag
      startExpValue = 0
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    CodeComponent code_intro_gral
      Code Type = Auto->JS
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      Begin Routine:
        if intro_gral_flag > 0:
            continueRoutine = False
        else:
            intro_gral_flag = intro_gral_flag + 1
    TextComponent text_up_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A continuación, te presentaremos dos imágenes, una del lado derecho y una del lado izquierdo.
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    TextComponent text_mid_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = En cada caso, elige la imagen con MAYOR AREA
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    TextComponent text_down_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Trata de responder tan rápido como puedas.
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    ButtonComponent button_hello_2
      anchor = bottom-center
      bold = True
      borderColor = 1.0000, -0.4588, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.15)
      startVal [time (s)] = 0.15
      text = INICIAR
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  Routine intro_pastries
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    VariableComponent intro_pastries_flag
      startExpValue = 0
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    CodeComponent code_intro_pastries
      Code Type = Auto->JS
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      Begin Routine:
        if intro_pastries_flag > 0:
            continueRoutine = False
        else:
            intro_pastries_flag = intro_pastries_flag + 1
    TextComponent text_up_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A continuación, te presentaremos dos imágenes, una del lado derecho y una del lado izquierdo.
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    TextComponent text_mid_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = En cada caso, elige el o los pastelillos con MAYOR AREA
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    TextComponent text_down_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Trata de responder tan rápido como puedas.
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    ButtonComponent button_hello_3
      anchor = bottom-center
      bold = True
      borderColor = 1.0000, -0.4588, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.15)
      startVal [time (s)] = 0.15
      text = INICIAR
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  Routine intro_score
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    VariableComponent intro_score_flag
      startExpValue = 0
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    CodeComponent code_intro_score
      Code Type = Auto->JS
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      Begin Routine:
        if intro_score_flag > 0:
            continueRoutine = False
        else:
            intro_score_flag = intro_score_flag + 1
    TextComponent text_up_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A continuación, te presentaremos dos imágenes, una del lado derecho y una del lado izquierdo.
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    TextComponent text_mid_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = En cada caso, elige la imagen con MAYOR AREA. Por cada respuesta correcta, obtendras un peso (\$1)
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    TextComponent text_down_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Trata de responder tan rápido como puedas.
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    ButtonComponent button_hello_4
      anchor = bottom-center
      bold = True
      borderColor = 1.0000, -0.4588, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.15)
      startVal [time (s)] = 0.15
      text = INICIAR
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  Routine TEST_score
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    ImageComponent illusion_score
      image [set every repeat] = $camino
      size = [56*0.72,28*0.72]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      units = cm
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    PolygonComponent LEFT_illusion_score
      fillColor = white
      opacity = 0
      pos = -0.44,0
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_illusion_score
      fillColor = white
      opacity = 0
      pos = 0.44,0
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_illusion_score
      clickable = LEFT_illusion, RIGHT_illusion
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.1
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    CodeComponent code_score
      Code Type = Auto->JS
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      End Routine:
        response = str(mouse_illusion_score.clicked_name)
        response = response.split("_")[0]
        response = response.replace("['", "")
        if response == correctanswer or correctanswer == "NONE":
            score = score + 1

        print(score)
  Routine setup_vars
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Flow
  Routine consent
  LoopInitiator rblocks loopType="TrialHandler"
    conditions = [{'TEST_galletas': 1, 'TEST_illusion': 1, 'TEST_score': 1}]
    conditionsFile = randomblock.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator A loopType="TrialHandler"
      conditionsFile = Imagenes/numerosity_condition_file.xlsx
      loopType = random
      nReps = illusion_loop
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      conditions:
        [{'image': 'circle_crown.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/circle_crown.png', 'correctansweris': 'larger'},
        {'image': 'circle_dots.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/circle_dots.png', 'correctansweris': 'larger'},
        {'image': 'circle_ring.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/circle_ring.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.5.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/circle1_0.5.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.67.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/circle1_0.67.png', 'correctansweris': 'larger'},
        {'image': 'circle0.5_1.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/circle0.5_1.png', 'correctansweris': 'larger'},
        {'image': 'circle0.67_1.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/circle0.67_1.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.5.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/crown1_0.5.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.67.png', 'correctanswer': 'LEFT', 'camino': 'Imagenes/crown1_0.67.png', 'correctansweris': 'larger'},
        {'image': 'crown0.5_1.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/crown0.5_1.png', 'correctansweris': 'larger'},
        {'image': 'crown0.67_1.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/crown0.67_1.png', 'correctansweris': 'larger'},
        {'image': 'crown_circle.png', 'correctanswer': 'RIGHT', 'camino': 'Imagenes/crown_circle.png', 'correctansweris': 'larger'}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
      Routine intro_gral
      Routine TEST_illusion
      Routine inter
    LoopTerminator A
    LoopInitiator B loopType="TrialHandler"
      conditionsFile = Galletas/numerosity_condition_file.xlsx
      loopType = random
      nReps = galletas_loop
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      conditions:
        [{'image': 'circle_crown_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/circle_crown_p.png', 'correctansweris': 'larger'},
        {'image': 'circle_dots_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/circle_dots_p.png', 'correctansweris': 'larger'},
        {'image': 'circle_ring_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/circle_ring_p.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.5_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/circle1_0.5_p.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.67_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/circle1_0.67_p.png', 'correctansweris': 'larger'},
        {'image': 'circle0.5_1_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/circle0.5_1_p.png', 'correctansweris': 'larger'},
        {'image': 'circle0.67_1_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/circle0.67_1_p.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.5_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/crown1_0.5_p.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.67_p.png', 'correctanswer': 'LEFT', 'camino': 'Galletas/crown1_0.67_p.png', 'correctansweris': 'larger'},
        {'image': 'crown0.5_1_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/crown0.5_1_p.png', 'correctansweris': 'larger'},
        {'image': 'crown0.67_1_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/crown0.67_1_p.png', 'correctansweris': 'larger'},
        {'image': 'crown_circle_p.png', 'correctanswer': 'RIGHT', 'camino': 'Galletas/crown_circle_p.png', 'correctansweris': 'larger'}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
      Routine intro_pastries
      Routine TEST_illusion
      Routine inter
    LoopTerminator B
    LoopInitiator C loopType="TrialHandler"
      conditionsFile = Imagenes/numerosity_condition_file.xlsx
      loopType = random
      nReps = score_loop
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      conditions:
        [{'image': 'circle_crown.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\circle_crown.png', 'correctansweris': 'larger'},
        {'image': 'circle_dots.png', 'correctanswer': 'RIGHT', 'camino': 'Numerosity\\Imagenes\\circle_dots.png', 'correctansweris': 'larger'},
        {'image': 'circle_ring.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\circle_ring.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.5.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\circle1_0.5.png', 'correctansweris': 'larger'},
        {'image': 'circle1_0.67.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\circle1_0.67.png', 'correctansweris': 'larger'},
        {'image': 'circle0.5_1.png', 'correctanswer': 'RIGHT', 'camino': 'Numerosity\\Imagenes\\circle0.5_1.png', 'correctansweris': 'larger'},
        {'image': 'circle0.67_1.png', 'correctanswer': 'RIGHT', 'camino': 'Numerosity\\Imagenes\\circle0.67_1.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.5.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\crown1_0.5.png', 'correctansweris': 'larger'},
        {'image': 'crown1_0.67.png', 'correctanswer': 'LEFT', 'camino': 'Numerosity\\Imagenes\\crown1_0.67.png', 'correctansweris': 'larger'},
        {'image': 'crown0.5_1.png', 'correctanswer': 'RIGHT', 'camino': 'Numerosity\\Imagenes\\crown0.5_1.png', 'correctansweris': 'larger'},
        {'image': 'crown0.67_1.png', 'correctanswer': 'RIGHT', 'camino': 'Numerosity\\Imagenes\\crown0.67_1.png', 'correctansweris': 'larger'}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
      Routine intro_score
      Routine TEST_score
      Routine inter
    LoopTerminator C
  LoopTerminator rblocks
  Routine fin
